PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1680, 1050]
  color = 1.0000, 1.0000, 1.0000
  expName = experiment
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instruction
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    TextComponent Welcome
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will see sentences with made-up words (e.g., "blick").
        After each sentence, choose the image that best matches the word.

        ▶ Keyboard: Press F (left image) or J (right image)
        ▶ Mouse/Touch: Click directly on the image

        Press F, J, or click to begin.
    KeyboardComponent start_key
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent sentence
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_left
      pos = (-0.4, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent image_right
      pos = (0.4, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent logic
      Code Type = Auto->JS
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      Begin Routine:
        # Get values from CSV
        word_text = word
        article_cond = article
        target = correct_type
        obj_img = obj_image
        sub_img = sub_image
        phrase_type = phrase
        trial_kind = trial_type

        # Build image paths
        obj_path = "obj/" + obj_img
        sub_path = "subs/" + sub_img

        # Randomize left/right position using PsychoPy-compatible rand()
        if rand() < 0.5:
            # Object on left, substance on right
            image_left.setImage(obj_path)
            image_right.setImage(sub_path)
            if target == 'obj':
                correct_response = 'f'
                correct_side = 'left'
            else:
                correct_response = 'j'
                correct_side = 'right'
        else:
            # Substance on left, object on right
            image_left.setImage(sub_path)
            image_right.setImage(obj_path)
            if target == 'sub':
                correct_response = 'f'
                correct_side = 'left'
            else:
                correct_response = 'j'
                correct_side = 'right'

        # Build the sentence based on phrase type
        if phrase_type == 'look':
            if article_cond == 'a':
                sentence_text = "Look! A " + word_text + "."
            else:
                sentence_text = "Look! " + word_text + "."
        elif phrase_type == 'there_is':
            if article_cond == 'a':
                sentence_text = "There is a " + word_text + "."
            else:
                sentence_text = "There is " + word_text + "."
        elif phrase_type == 'that_is':
            if article_cond == 'a':
                sentence_text = "That is a " + word_text + "."
            else:
                sentence_text = "That is " + word_text + "."

        sentence.setText(sentence_text)

        # Reset mouse clicks for this trial
        mouse.clickReset()
      End Routine:
        # --- End Routine ---

        # Check for mouse click
        left_clicked = mouse.isPressedIn(image_left)
        right_clicked = mouse.isPressedIn(image_right)

        # Determine response from either keyboard or mouse
        if key_resp.keys is not None:
            # Keyboard response was made
            response = key_resp.keys
            rt = key_resp.rt
            response_method = 'keyboard'
        elif left_clicked:
            # Mouse clicked on left image
            response = 'f'
            rt = mouse.getPressed()[2]
            response_method = 'mouse'
        elif right_clicked:
            # Mouse clicked on right image
            response = 'j'
            rt = mouse.getPressed()[2]
            response_method = 'mouse'
        else:
            # No response yet
            response = None
            rt = None
            response_method = 'none'

        # Calculate accuracy
        if response is None:
            accuracy = 0
        elif response == correct_response:
            accuracy = 1
        else:
            accuracy = 0

        # Save trial variables
        thisExp.addData('word', word_text)
        thisExp.addData('article', article_cond)
        thisExp.addData('phrase', phrase_type)
        thisExp.addData('trial_type', trial_kind)
        thisExp.addData('correct_type', target)
        thisExp.addData('obj_image', obj_img)
        thisExp.addData('sub_image', sub_img)

        # Save response data
        thisExp.addData('response', response)
        thisExp.addData('rt', rt)
        thisExp.addData('response_method', response_method)
        thisExp.addData('correct_response', correct_response)
        thisExp.addData('accuracy', accuracy)

        # Move to next trial
        thisExp.nextEntry()
    MouseComponent mouse
      clickable = image_left, image_right
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine thankyou
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    TextComponent thankyou_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this experiment!

        Please press space or return to exit, or click anywhere on the screen.
    KeyboardComponent end_key
      allowedKeys = 'space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = conditions.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_id', 1), ('word', 'tib'), ('article', None), ('correct_type', 'sub'), ('obj_image', 'o18.png'), ('sub_image', 's20.png'), ('phrase', 'there_is'), ('trial_type', 'filler')]),
      OrderedDict([('trial_id', 2), ('word', 'stutch'), ('article', 'a'), ('correct_type', 'obj'), ('obj_image', 'o7.png'), ('sub_image', 's20.png'), ('phrase', 'look'), ('trial_type', 'critical')]),
      OrderedDict([('trial_id', 3), ('word', 'wis'), ('article', 'a'), ('correct_type', 'obj'), ('obj_image', 'o9.png'), ('sub_image', 's12.png'), ('phrase', 'look'), ('trial_type', 'critical')]),
      OrderedDict([('trial_id', 4), ('word', 'tarb'), ('article', 'a'), ('correct_type', 'obj'), ('obj_image', 'o20.png'), ('sub_image', 's24.png'), ('phrase', 'look'), ('trial_type', 'critical')]),
      OrderedDict([('trial_id', 5), ('word', 'vow'), ('article', None), ('correct_type', 'sub'), ('obj_image', 'o3.png'), ('sub_image', 's1.png'), ('phrase', 'look'), ('trial_type', 'critical')]),
      OrderedDict([('trial_id', 6), ('word', 'trebe'), ('article', 'a'), ('correct_type', 'obj'), ('obj_image', 'o5.png'), ('sub_image', 's22.png'), ('phrase', 'that_is'), ('trial_type', 'filler')]),
      OrderedDict([('trial_id', 7), ('word', 'praith'), ('article', 'a'), ('correct_type', 'obj'), ('obj_image', 'o17.png'), ('sub_image', 's10.png'), ('phrase', 'look'), ('trial_type', 'critical')])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
    Routine trial
  LoopTerminator trials_loop
  Routine thankyou
